PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = myTask
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Routines
  Routine Welcome_2
    TextComponent Welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Hi
        Focus on Cue!
  Routine Cue
    ImageComponent CueImage
      image [set every repeat] = $ArrImage
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine Blank
    TextComponent BlankPage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Memory_Image
    ImageComponent MemoryImage
      image [set every repeat] = $ImageFile
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Delay
    TextComponent DelayText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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  Routine Test_Array
    ImageComponent Test
      image [set every repeat] = $ImageTest
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine Response
    TextComponent Resp
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Which Side was Org Image?
        Left or Right?
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine Welcome_2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:101
    conditionsFile = Arr.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ArrImage': 'Images/Left.png', 'ImageFile': 'Images/Org_4.png', 'ImageTest': 'Images/Test_4.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_6.png', 'ImageTest': 'Images/Test_6.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_3.png', 'ImageTest': 'Images/Test_3.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_5.png', 'ImageTest': 'Images/Test_5.png'},
      {'ArrImage': 'Images/Left.png', 'ImageFile': 'Images/Org_5.png', 'ImageTest': 'Images/Test_5.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_3.png', 'ImageTest': 'Images/Test_3.png'},
      {'ArrImage': 'Images/Left.png', 'ImageFile': 'Images/Org_5.png', 'ImageTest': 'Images/Test_5.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_4.png', 'ImageTest': 'Images/Test_4.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_3.png', 'ImageTest': 'Images/Test_3.png'},
      {'ArrImage': 'Images/Left.png', 'ImageFile': 'Images/Org_4.png', 'ImageTest': 'Images/Test_4.png'},
      {'ArrImage': 'Images/Left.png', 'ImageFile': 'Images/Org_6.png', 'ImageTest': 'Images/Test_6.png'},
      {'ArrImage': 'Images/Left.png', 'ImageFile': 'Images/Org_2.png', 'ImageTest': 'Images/Test_2.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_2.png', 'ImageTest': 'Images/Test_2.png'},
      {'ArrImage': 'Images/Right.png', 'ImageFile': 'Images/Org_2.png', 'ImageTest': 'Images/Test_2.png'},
      {'ArrImage': 'Images/Left.png', 'ImageFile': 'Images/Org_5.png', 'ImageTest': 'Images/Test_5.png'}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
    Routine Cue
    Routine Blank
    Routine Memory_Image
    Routine Delay
    Routine Test_Array
    Routine Response
  LoopTerminator trials
